PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = pilot_study
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine WelcomeScreen
    RoutineSettingsComponent WelcomeScreen
      saveStartStop = False
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    TextComponent welcome_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hello, Welcome the Image Matching study conducted by the VIDAR lab.

        Press 'SPACE' to continue.
    KeyboardComponent next_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine consent
    RoutineSettingsComponent consent
      saveStartStop = False
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    TextComponent ask_consent
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this study, your speed, accuracy, and self-reported confidence will be collected for analysis. No personally identifiable information will be recorded.
        You may exit and rescind your consent at any time during the study by pressing the escape key (esc).

        Now that you understand what will be expected from you as well as what data will be collected, do you consent? (y/n)
    KeyboardComponent consent_key
      allowedKeys = 'y','n'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Both
      Each Frame:
        if(consent_key.keys == 'n' or consent_key.keys == str('n')):
            return quit
      Each JS Frame:
        //check if unconsented
        if (consent_key.keys === 'n' || consent_key.keys === String('n')) {
            quitPsychoJS('Unconsented through pressing the [n] key. Goodbye!', false);
        }
  Routine blank500
    RoutineSettingsComponent blank500
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine med_sets
    RoutineSettingsComponent med_sets
      saveStartStop = False
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    ImageComponent image
      image [set every repeat] = $set_img
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5', '6'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine task
    RoutineSettingsComponent task
      saveStartStop = False
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On the following page, you will be given a query image of a hotel room.

        Your task is to use keys '1', '2', '3', '4', '5', or '6' to select the corresponding image that pictures the same hotel room.

        Press 'SPACE' to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine imp_sets
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    ImageComponent image2
      image [set every repeat] = $set_img2
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp2
      allowedKeys = '1','2','3','4','5', '6'
      correctAns = $correct2
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Next_Set
    RoutineSettingsComponent Next_Set
      saveStartStop = False
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    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = NEXT DIFFICULTY
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  Routine easy_sets
    RoutineSettingsComponent easy_sets
      saveStartStop = False
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    ImageComponent imageEasy
      image [set every repeat] = $set_img
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_easy
      allowedKeys = '1','2','3','4','5', '6'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine hard_sets
    RoutineSettingsComponent hard_sets
      saveStartStop = False
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    ImageComponent imageHard
      image [set every repeat] = $set_img
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_hard
      allowedKeys = '1','2','3','4','5', '6'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine EndScreen
    RoutineSettingsComponent EndScreen
      saveStartStop = False
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    TextComponent end_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing!

        Please wait while we save your results...
    CodeComponent DataPipe_Link
      Code Type = JS
      Begin JS Routine:
        // Prevent default CSV download
        // psychoJS._saveResults = false;

        // Collect all keys from trial data
        const allKeys = [...new Set(psychoJS._experiment._trialsData.flatMap(d => Object.keys(d)))];

        // Convert to CSV rows
        let csvRows = psychoJS._experiment._trialsData.map(row =>
          allKeys.map(k => {
            let val = row[k];
            if (typeof val === 'string') val = '"' + val.replace(/"/g, '""') + '"';
            return (val === undefined || val === null) ? '' : val;
          }).join(',')
        );

        // Compute summary stats
        let accKey = allKeys.find(k => k.endsWith('.corr') || k.toLowerCase().includes('corr'));
        let rtKey = allKeys.find(k => k.endsWith('.rt') || k.toLowerCase().includes('rt'));

        let accVals = psychoJS._experiment._trialsData.map(row => parseFloat(row[accKey])).filter(v => !isNaN(v));
        let rtVals = psychoJS._experiment._trialsData.map(row => parseFloat(row[rtKey])).filter(v => !isNaN(v));

        let meanAcc = accVals.length ? (accVals.reduce((a, b) => a + b, 0) / accVals.length).toFixed(4) : 'NA';
        let meanRT = rtVals.length ? (rtVals.reduce((a, b) => a + b, 0) / rtVals.length).toFixed(4) : 'NA';

        // Append summary to CSV
        csvRows.push(`"SUMMARY","mean_accuracy",${meanAcc}`);
        csvRows.push(`"SUMMARY","mean_rt",${meanRT}`);

        // Final CSV
        let csvData = allKeys.join(',') + '\n' + csvRows.join('\n');

        // Create filename
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Send to DataPipe
        fetch('https://pipe.jspsych.org/api/data', {
          method: 'POST',
          headers: {
            'Content-Type': 'application/json',
            Accept: '*/*',
          },
          body: JSON.stringify({
            experimentID: 'DLFoEuJu8PX1',
            filename: filename,
            data: csvData,
          }),
        }).then(response => response.json()).then(data => {
          console.log('DataPipe uploaded:', data);
          quitPsychoJS();
        }).catch(error => {
          console.error('Upload failed:', error);
          quitPsychoJS();
        });
Flow
  Routine WelcomeScreen
  Routine consent
  Routine task
  LoopInitiator trialsEasy loopType="TrialHandler"
    conditionsFile = resources/easyTest.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('set_img', 'resources/images/easy/easy_1.png'), ('correct', np.int64(6))]),
      OrderedDict([('set_img', 'resources/images/easy/easy_2.png'), ('correct', np.int64(5))]),
      OrderedDict([('set_img', 'resources/images/easy/easy_3.png'), ('correct', np.int64(3))]),
      OrderedDict([('set_img', 'resources/images/easy/easy_4.png'), ('correct', np.int64(1))]),
      OrderedDict([('set_img', 'resources/images/easy/easy_5.png'), ('correct', np.int64(5))])]
    Routine easy_sets
    Routine blank500
  LoopTerminator trialsEasy
  Routine Next_Set
  LoopInitiator trialsMed loopType="TrialHandler"
    conditionsFile = resources/loopTest.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('set_img', 'resources/images/m1.png'), ('correct', np.int64(3))]),
      OrderedDict([('set_img', 'resources/images/m2.png'), ('correct', np.int64(1))]),
      OrderedDict([('set_img', 'resources/images/m3.png'), ('correct', np.int64(3))]),
      OrderedDict([('set_img', 'resources/images/m4.png'), ('correct', np.int64(6))]),
      OrderedDict([('set_img', 'resources/images/m5.png'), ('correct', np.int64(4))])]
    Routine med_sets
    Routine blank500
  LoopTerminator trialsMed
  Routine Next_Set
  LoopInitiator trialsHard loopType="TrialHandler"
    conditionsFile = resources/hardTest.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('set_img', 'resources/images/hard/hard_1.png'), ('correct', np.int64(5))]),
      OrderedDict([('set_img', 'resources/images/hard/hard_2.png'), ('correct', np.int64(2))]),
      OrderedDict([('set_img', 'resources/images/hard/hard_3.png'), ('correct', np.int64(1))]),
      OrderedDict([('set_img', 'resources/images/hard/hard_4.png'), ('correct', np.int64(4))]),
      OrderedDict([('set_img', 'resources/images/hard/hard_5.png'), ('correct', np.int64(2))])]
    Routine hard_sets
    Routine blank500
  LoopTerminator trialsHard
  Routine Next_Set
  LoopInitiator trialsImp loopType="TrialHandler"
    conditionsFile = resources/impTest.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('set_img2', 'resources/images/i1.png'), ('correct2', np.int64(2))]),
      OrderedDict([('set_img2', 'resources/images/i2.png'), ('correct2', np.int64(1))]),
      OrderedDict([('set_img2', 'resources/images/i3.png'), ('correct2', np.int64(4))]),
      OrderedDict([('set_img2', 'resources/images/i4.png'), ('correct2', np.int64(3))]),
      OrderedDict([('set_img2', 'resources/images/i5.png'), ('correct2', np.int64(5))])]
    Routine imp_sets
    Routine blank500
  LoopTerminator trialsImp
  Routine EndScreen
